PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = movie_affect-rating_shimmer-trigger
  keyboardBackend = ioHub
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Routines
  Routine start_experiment
    TextComponent startExperiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to start
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    KeyboardComponent key_start_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent initialization
      Code Type = Auto->JS
  Routine fixation
    PolygonComponent fixation_1
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial_movie
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $movie_name
      size = (800,600)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent trial_loader
      Code Type = Auto->JS
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      Begin Experiment:
        currentTrial = 1
        correctTrial = 0
        trialsList = data.importConditions('stim_param.xlsx')
        totalTrial = len(trialsList)
  Routine thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your participation!
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    KeyboardComponent key_last
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    TextComponent wait_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to continue
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    KeyboardComponent wait_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'movie_name': 'duck_video.mp4'}]
    conditionsFile = stim_param.xlsx
    loopType = random
    nReps = 1
    random seed = 20230225
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    Routine fixation
    Routine trial_movie
    Routine wait
  LoopTerminator trials
  Routine thanks
